<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details></Details>
        <Title></Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <Size symbol="size" value="5, 6,   0.0"/>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="100"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <Analysis>
        <ModelGraph reduced="false" format="dot" include-tags="#untagged"/>
        <Gnuplotter time-step="100" name="V_n">
            <Plot title="V_n">
                <Cells value="V_n">
                    <ColorMap>
                        <Color color="gray" value="0"/>
                        <Color color="blue" value="1"/>
                    </ColorMap>
                </Cells>
            </Plot>
            <Terminal name="png"/>
        </Gnuplotter>
        <Logger time-step="1.0" name="V_grid">
            <Input>
                <Symbol symbol-ref="V"/>
                <Symbol symbol-ref="space.x"/>
                <Symbol symbol-ref="space.y"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Logger time-step="1.0" name="cell_prop">
            <Input>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="cell.type"/>
                <Symbol symbol-ref="V"/>
                <Symbol symbol-ref="V_n"/>
                <Symbol symbol-ref="inf_by"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <ContactLogger time-step="1.0"/>
        <Logger time-step="1.0" name="populations">
            <Input>
                <Symbol symbol-ref="celltype.target.size"/>
                <Symbol symbol-ref="celltype.infected.size"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="b_c2c"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
    </Analysis>
    <Global>
        <Constant symbol="b_c2c" value="0.0"/>
        <Constant symbol="V" value="0.0"/>
        <Event>
            <Condition>time >= 10</Condition>
            <Rule symbol-ref="start">
                <Expression>1</Expression>
            </Rule>
        </Event>
        <Variable symbol="start" value="0" name=""/>
    </Global>
    <CellTypes>
        <CellType class="biological" name="target">
            <VolumeConstraint target="3" strength="1"/>
            <SurfaceConstraint target="1" strength="1" mode="aspherity"/>
            <ConnectivityConstraint/>
            <Property symbol="V" value="0"/>
            <Property symbol="V_n" value="0"/>
            <NeighborhoodReporter>
                <Input value="V" scaling="length" noflux-cell-medium="true"/>
                <Output mapping="average" symbol-ref="V_n"/>
            </NeighborhoodReporter>
            <Function symbol="p_c2c">
                <Expression>1-exp(-b_c2c*V_n*start)</Expression>
            </Function>
            <ChangeCellType newCellType="infected" time-step="1" name="cell2cell infection">
                <Condition>rand_uni(0,1) &lt;= p_c2c</Condition>
                <Triggers>
                    <Rule symbol-ref="V">
                        <Expression>1</Expression>
                    </Rule>
                    <Rule symbol-ref="inf_by">
                        <Expression>1</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <Property symbol="inf_by" value="0.0"/>
            <FreezeMotion>
                <Condition>start == 1</Condition>
            </FreezeMotion>
        </CellType>
        <CellType class="biological" name="infected">
            <VolumeConstraint target="3" strength="1"/>
            <SurfaceConstraint target="1" strength="1" mode="aspherity"/>
            <ConnectivityConstraint/>
            <Property symbol="V" value="1"/>
            <Property symbol="V_n" value="0"/>
            <NeighborhoodReporter>
                <Input value="V" scaling="length" noflux-cell-medium="true"/>
                <Output mapping="average" symbol-ref="V_n"/>
            </NeighborhoodReporter>
            <Property symbol="inf_by" value="0.0"/>
            <FreezeMotion>
                <Condition>start == 1</Condition>
            </FreezeMotion>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction/>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <MetropolisKinetics temperature="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </MonteCarloSampler>
    </CPM>
    <CellPopulations>
        <Population size="9" type="target" name="target">
            <InitDistribute probability="1" number-of-cells="9" mode="random"/>
        </Population>
        <Population size="1" type="infected" name="infected">
            <InitDistribute probability="1" number-of-cells="1" mode="random"/>
        </Population>
    </CellPopulations>
</MorpheusModel>
